<ReactionScheme>
  <!-- Ca [Avrama] -->
  <Specie name="CamOut" id="CamOut" kdiff="11" kdiffunit="mu2/s"/>
  <Specie name="Ca" id="Ca" kdiff="175" kdiffunit="mu2/s"/>
  <Specie name="CaInact" id="CaInact" kdiff="11" kdiffunit="mu2/s"/>
  <!-- CaBuf -->
  <Specie name="CaBuf" id="CaBuf" kdiff="11" kdiffunit="mu2/s"/>
  <!-- PP1 -->
  <Specie name="PP1" id="PP1" kdiff="0" kdiffunit="mu2/s"/>
  <!-- CaM -->
  <Specie name="CaM" id="CaM" kdiff="11" kdiffunit="mu2/s"/> <!--Calmodulin-->
  <Specie name="CaMCa2" id="CaMCa2" kdiff="11" kdiffunit="mu2/s"/> <!-- 2 Ca bound Calmodulin-->
  <Specie name="CaMCa4" id="CaMCa4" kdiff="11" kdiffunit="mu2/s"/> <!-- 4 Ca bound Calmodulin-->
  <!-- CK -->
<Specie name="CK"             id="CK"            kdiff="3.6"   kdiffunit="mu2/s"/>
<Specie name="CKCaMCa4"       id="CKCaMCa4"      kdiff="3.6"   kdiffunit="mu2/s"/>
<Specie name="CKpCaMCa4"      id="CKpCaMCa4"     kdiff="3.6"   kdiffunit="mu2/s"/>
<Specie name="CKp"            id="CKp"           kdiff="3.6"   kdiffunit="mu2/s"/>
<Specie name="CKpPP1"         id="CKpPP1"        kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="CKpCaMCa4PP1"         id="CKpCaMCa4PP1"        kdiff="0"     kdiffunit="mu2/s"/>
<!-- Constant Cam    -->
    <Reaction name = "Cam_buffer" id="Cam_Buffer">
        <Reactant specieID="CaM"/>
        <Product specieID="CamOut"/>

        <forwardRate>0.1</forwardRate>
        <reverseRate>0.001</reverseRate>
        <Q10>0.2</Q10>
    </Reaction>

 
    <Reaction name = "Ca_CaBuf_buffer" id="Ca_CaBuf_buffer">
        <Reactant specieID="Ca"/>
        <Reactant specieID="CaBuf"/>
        <Product specieID="CaInact"/>

        <forwardRate>0.01e-3</forwardRate>
        <reverseRate>0.01e-3</reverseRate>
        <Q10>0.2</Q10>
    </Reaction>

    <!-- CaM, CaMCa4 and PP2B Binding -->

    <!--1) CaM  + 2Ca <-> CaMCa2 --><!--This is the C site-->
    <Reaction name="CaM_bind" id="CaM_bind">
        <Reactant specieID="CaM"/>
        <Reactant specieID="Ca" n="2"/>
        <Product specieID="CaMCa2"/>

        <forwardRate>6e-6</forwardRate>
        <reverseRate>9.1e-3</reverseRate>
        <Q10>0.2</Q10>
    </Reaction>

    <!--2) CaMCa2  + 2Ca <-> CaMCa4 --> <!--This is the N-site-->
    <Reaction name="CaMCa2_bind" id="CaMCa2_bind">
        <Reactant specieID="CaMCa2"/>
        <Reactant specieID="Ca" n="2"/>
        <Product specieID="CaMCa4"/>

        <forwardRate>0.1e-3</forwardRate>
        <reverseRate>1000e-3</reverseRate>
        <Q10>0.2</Q10>
    </Reaction>


 <!--1) CaMCa4 + CK <-> CKCaMCa4  -->
    <Reaction name = "CK bind" id="CK_bind">
        <Reactant specieID="CaMCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCaMCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 1.95e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
        <Q10>    0.2            </Q10>
    </Reaction>
<!--2a) 3 CKCaMCa4 + 1 CKCaMCa4 <-> 3  CKCaMCa4 + 1 CKpCaMCa4-->
    <Reaction name = "CKCaM bind1" id="CKCaM_bind1">
        <Reactant specieID="CKCaMCa4"  power="4"        />
        <Product  specieID="CKCaMCa4"   power="3"         />
        <Product  specieID="CKpCaMCa4"           />

        <forwardRate> 35.0e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>

<!--2b)  2 CKCaMCa4 + 1 CKCaMCa4 <-> 2 CKCaMCa4 + 1 CKpCaMCa4-->
    <Reaction name = "CKCaM bind2" id="CKCaM_bind2">
        <Reactant specieID="CKCaMCa4"  power="3"        />
        <Product  specieID="CKCaMCa4"  power="2"         />
        <Product  specieID="CKpCaMCa4"           />

        <forwardRate> 4.0e-12 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>
<!--2c)  2 CKpCaMCa4 + 2 CKCaMCa4 <-> 3 CKpCaMCa4 + 1 CKCaMCa4-->
    <Reaction name = "CKCaM bind3" id="CKCaM_bind3">
        <Reactant specieID="CKpCaMCa4"  power="2"        />
        <Reactant specieID="CKCaMCa4"  power="2"        />
        <Product  specieID="CKCaMCa4"           />
        <Product  specieID="CKpCaMCa4" power="3"         />

        <forwardRate> 55.1e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>

<!-- CKpCaMCaMCa4 <-> CKp + CaMCa4 -->
    <Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCaMCa4"              />
        <Product  specieID="CaMCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.02e-3   </reverseRate>
        <Q10>    0.2            </Q10>
    </Reaction>
  <!-- CKp + PP1 <-> CKpPP1 -->
    <Reaction name = "CKp bind" id="CKp_bind">
        <Reactant specieID="CKp"                    />
        <Reactant specieID="PP1"                    />
        <Product  specieID="CKpPP1"                 />

        <forwardRate> 0.009e-06     </forwardRate>
        <reverseRate> 0.085e-03   </reverseRate>
        <Q10>     0.2             </Q10>
    </Reaction>

<!-- CKpPP1 -> PP1 + CK -->
    <Reaction name = "CKpPP1 reac" id="CKpPP1_reac">
        <Reactant specieID="CKpPP1"                 />
        <Product specieID="PP1"                     />
        <Product specieID="CK"                      />

        <forwardRate> 0.01e-03   </forwardRate>
        <reverseRate> 0.0         </reverseRate>
        <Q10>    0.2              </Q10>
    </Reaction>
  <!-- CKp + PP1 <-> CKpPP1 -->
   <Reaction name = "CKpCaMCa4PP1_bind" id="CKpCaMCa4PP1_bind">
        <Reactant specieID="CKpCaMCa4"                    />
        <Reactant specieID="PP1"                    />
        <Product  specieID="CKpCaMCa4PP1"                 />

        <forwardRate> 0.0025e-06     </forwardRate>
        <reverseRate> 0.085e-03   </reverseRate>
        <Q10>     0.2             </Q10>
    </Reaction>

<!-- CKpPP1 -> PP1 + CK -->
   <Reaction name = "CKpCaMCa4PP1_ reac" id="CKpCaMCa4PP1_reac">
        <Reactant specieID="CKpCaMCa4PP1"                 />
        <Product specieID="PP1"                     />
        <Product specieID="CKCaMCa4"                      />

        <forwardRate> 0.0045e-03   </forwardRate>
        <reverseRate> 0.0         </reverseRate>
        <Q10>    0.2              </Q10>
    </Reaction>
 
</ReactionScheme>
